CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Time>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawData
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    Set intensity range from:Image bit-depth
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Highlight well outlines to turn white for identification, and turn wells black so they will not be identified in next module.']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
    Select the input image:RawData
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:.4,.6
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify and remove well outlines']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyWells
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:7|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notes:['Expand well outline to cover background around each well edge']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
    Select the input objects:IdentifyWells
    Name the output objects:ExpandedWells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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
RescaleIntensity:[module_num:8|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notes:['Turn worms black to allow better edging in next module.']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
    Select the input image:RawData
    Name the output image:RescaleIntensityWorms
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:.25,.4
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
EnhanceEdges:[module_num:9|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notes:['Create outlines of enhanced worms to remove background and enhance identification.']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
    Select the input image:RescaleIntensityWorms
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
MaskImage:[module_num:10|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notes:['Use expanded identified wells as mask over edged image to remove plate background and leave just the wells for worm identification in the next module.']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
    Select the input image:EdgedImage
    Name the output image:MaskWells
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedWells
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:[" *Can this be removed? previously used to create grid, now we identify other objects for grid, just wanted to check with you first. We identify worms later using the grid, I don't see anywhere where the output of this module is used."]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
    Select the input image:MaskWells
    Name the primary objects to be identified:IdentifyWorms
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:12|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notes:['This module is the start of defining the grid. It uses the inverted mask created from the expanded identified wells to create black holes over the white plate generated from RescaleIntensityWorms. This output can then be inverted to create white well objects for identification.']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
    Select the input image:RescaleIntensityWorms
    Name the output image:RescaleforGrid
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedWells
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    Invert the mask?:No

ImageMath:[module_num:13|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notes:['Inverting output from previous module to create white objects for identification.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertforGrid
    Image or measurement?:Image
    Select the first image:RescaleIntensity
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identifying the wells to use as objects to define the grid ']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
    Select the input image:InvertforGrid
    Name the primary objects to be identified:WellsforGrid
    Typical diameter of objects, in pixel units (Min,Max):50,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
DefineGrid:[module_num:15|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notes:['Using the previous modules objects to generate a grid, and outputing over edged image to prepare for worm identification of highlighted worms. Using the grid will number the worms and get rid of some background.']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:WellsforGrid
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:298,258
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1300,820
    Row number of the second cell:6
    Column number of the second cell:10
    Retain an image of the grid?:Yes
    Name the output image:GridedEdgedWorms
    Select the image on which to display the grid:MaskWells
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:16|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notes:['Identifying worms from previous module output. ']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
    Select the defined grid:Grid
    Name the objects to be identified:GridWorms
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:80
    Select the guiding objects:IdentifyWorms

ConvertObjectsToImage:[module_num:17|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notes:['Converting identified colored worms to image to save in a following module. ']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
    Select the input objects:GridWorms
    Name the output image:ColoredGridWorms
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:18|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notes:['Create binary image of worms for single well output to for RandIndex calculation (needs binar image).']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
    Select the input objects:GridWorms
    Name the output image:GridWorms
    Select the color format:Binary (black & white)
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
IdentifyObjectsInGrid:[module_num:19|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notes:['Creating large round objects (the size of the wells) to use down in the SaveCroppedObjects module to further reduce background (instead of using the whole square of the grid, it is trimmed down to just the identified circle).']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
    Select the defined grid:Grid
    Name the objects to be identified:GridWells
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:80
    Select the guiding objects:IdentifyWorms

DefineGrid:[module_num:20|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notes:['Why are we defining the grid again?']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:IdentifyWorms
    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:Yes
    Name the output image:GridedWorms
    Select the image on which to display the grid:ColoredGridWorms
    Use a previous grid if gridding fails?:Use any previous grid

DefineGrid:[module_num:21|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notes:['Why are we defining the grid again?']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:IdentifyWorms
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:298,258
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1300,820
    Row number of the second cell:6
    Column number of the second cell:10
    Retain an image of the grid?:Yes
    Name the output image:GridedWorms_Raw
    Select the image on which to display the grid:RawData
    Use a previous grid if gridding fails?:Use any previous grid

OverlayOutlines:[module_num:22|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notes:['Overlaying outline of defined worms to save for output to check worm identification after runing script.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawData
    Name the output image:OverlayGridWorms
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FFFF
    Select objects to display:GridWorms

SaveImages:[module_num:23|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notes:['Save image of colored worms for checking after running script.']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
    Select the type of image to save:Image
    Select the image to save:ColoredGridWorms
    Select method for constructing file names:Single name
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    Enter single file name:Colored Worm Plate \g<Time>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|overlays/colored worms/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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notes:['Save image of outlined worms for checking after running script.']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
    Select the type of image to save:Image
    Select the image to save:OverlayGridWorms
    Select method for constructing file names:Single name
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    Enter single file name:Outlined Worms \g<Time>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|overlays/outlined worms/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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notes:['Save image of grid for checking after running script.']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
    Select the type of image to save:Image
    Select the image to save:GridedWorms_Raw
    Select method for constructing file names:Single name
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    Enter single file name:Grid
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|overlays/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:26|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notes:['Saves a cropped image of each worm in its well for analysis using RandIndex. Uses GridWells as circle outline to remove more background.']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
    Objects:GridWells
    Directory:Default Output Folder sub-folder|wells/\g<Time>
    Saved file format:png
    Do you want to save cropped images or object masks?:Images
    Image:GridWorms
